var bit0 = false {
    report ('bit0 = $bit0')
}

var bit1 = false {
    report ('bit1 = $bit1')
}

var bit2 = false {
    report ('bit2 = $bit2')
}

var bit3 = false {
    report ('bit3 = $bit3')
}

var word = 0 {
    report ('word = $word')
}


labjack_ljm labjack (update_interval = 3ms) {
    labjack_ljm_digital_output (
        line = eio2
        value = bit0
        )
    labjack_ljm_digital_output (
        line = eio3
        value = bit1
        )
    labjack_ljm_digital_output (
        line = eio4
        value = bit2
        )
    labjack_ljm_digital_output (
        line = eio5
        value = bit3
        )
    labjack_ljm_word_input (
        first_line = cio0
        num_lines = 4
        value = word
        )
}


var index = 0

%define output_bits = [[0,0,0,0],
                       [1,0,0,0],
                       [0,1,0,0],
                       [0,0,1,0],
                       [0,0,0,1],
                       [1,1,1,1]]

%define update_bits ()
    index += 1
    bit0 = output_bits[index][0]
    bit1 = output_bits[index][1]
    bit2 = output_bits[index][2]
    bit3 = output_bits[index][3]
%end

%define wait_and_assert ()
    wait (1s)
    assert (word == (output_bits[index][0] * 1 +
                     output_bits[index][1] * 2 +
                     output_bits[index][2] * 4 +
                     output_bits[index][3] * 8))
%end


protocol {
    index = -1
    update_bits ()

    block (nsamples = 5) {
        word = -1

        report ('Starting device')
        start_io_device (labjack)

        wait_and_assert ()

        update_bits ()

        wait_and_assert ()

        report ('Stopping device')
        stop_io_device (labjack)
    }
}
